alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args
nonDebris,nonDebris,root,FSC-A,mindensity,,,,,
singlets,singlets,nonDebris,"FSC-A,FSC-H",singletGate,,,,,
lymph,lymph,singlets,"FSC-A,SSC-A",flowClust,"K=2,target=c(1e5,5e4)",,,prior_flowClust,K=2
cd3,cd3,lymph,CD3,mindensity,,,,,
*,cd4-/+cd8+/-,cd3,"cd4,cd8",mindensity,"gate_range=c(1,3)",,,,
activated cd4,CD38+HLA+,cd4+cd8-,"CD38,HLA",tailgate,,,,standardize_flowset,
activated cd8,CD38+HLA+,cd4-cd8+,"CD38,HLA",tailgate,tol=0.08,,,standardize_flowset,
*,CCR7+/-CD45RA+/-,cd4+cd8-,"CCR7,CD45RA",mindensity2,"gate_range=c(1,2),positive=FALSE",,,,
*,CCR7+/-CD45RA+/-,cd4-cd8+,"CCR7,CD45RA",mindensity2,"gate_range=c(1,3)",,,,